PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Data file delimiter = tab
  Data filename = u'Analysis/Data_EXNAT_3_training/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'sub-', 'session': '001', 'testing_mode': 'yes', 'RT_per_rectangle_oneback_single': '20', 'RT_per_rectangle_twoback_single': '20', 'RT_per_letter_baseline': '20', 'RT_per_letter_oneback_dual': '20', 'RT_per_letter_twoback_dual': '20'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.1.0
  Window size (pixels) = [1920, 1080]
  expName = EXNAT_3_fMRI
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 1
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Routines
  Routine Settings
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    CodeComponent functions
      Code Type = Py
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      Begin Experiment:
        # set screen resolution for eyetracker here:
        SCN_W, SCN_H = (1280, 800)

        ### import packages:

        # for setting the output encoding to UTF-8
        # import sys
        # --> if you don't do this, German "Umlaute" can't be displayed correctly:
        sys.stdout = open(sys.stdout.fileno(), mode='w', encoding='utf8', buffering=1)
        # print Python environment psychopy is currently using
        print(sys.executable)

        # for showing pictures
        from psychopy import visual
        # for getting current date & time:
        import datetime
        # numpy for being able to calculate
        import numpy as np
        # for random number generator:
        import random
        # for saving data in csv / working with pd data frames:
        import pandas as pd
        # additional timing package (I know we have core.wait, but I also want this one)
        import time
        # for calculations
        import math

        # Get functions from my custom scripts:
        # import all texts and instructions
        from EXNAT3_texts_MC_Qs import (instr_pic_path, instr_Reading_Baseline_main_no_click, instr_Reading_pseudotext_no_click, \
            instr_1back_single_main_no_click, instr_pic_1back_single_main_no_click, instr_1back_dual_main_no_click, \
            instr_pic_1back_dual_main_no_click, instr_2back_single_main_no_click, instr_pic_2back_single_main_no_click, instr_2back_dual_main_no_click, \
            instr_pic_2back_dual_main_no_click, warning_sign, text_01, text_01_Q1, text_01_Q1_ans, text_01_Q1_corr, \
            text_01_Q2, text_01_Q2_ans, text_01_Q2_corr, text_01_Q3, text_01_Q3_ans, text_01_Q3_corr, text_02, text_02_Q1, \
            text_02_Q1_ans, text_02_Q1_corr, text_02_Q2, text_02_Q2_ans, text_02_Q2_corr, text_02_Q3, text_02_Q3_ans, \
            text_02_Q3_corr, text_03, text_03_Q1, text_03_Q1_ans, text_03_Q1_corr, text_03_Q2, text_03_Q2_ans, text_03_Q2_corr, \
            text_03_Q3, text_03_Q3_ans, text_03_Q3_corr, text_04, text_04_Q1, text_04_Q1_ans, text_04_Q1_corr, text_04_Q2, \
            text_04_Q2_ans, text_04_Q2_corr, text_04_Q3, text_04_Q3_ans, text_04_Q3_corr, text_05, text_05_Q1, text_05_Q1_ans, \
            text_05_Q1_corr, text_05_Q2, text_05_Q2_ans, text_05_Q2_corr, text_05_Q3, text_05_Q3_ans, text_05_Q3_corr, text_06, \
            text_06_Q1, text_06_Q1_ans, text_06_Q1_corr, text_06_Q2, text_06_Q2_ans, text_06_Q2_corr, text_06_Q3, \
            text_06_Q3_ans, text_06_Q3_corr, text_07, text_07_Q1, text_07_Q1_ans, text_07_Q1_corr, text_07_Q2, text_07_Q2_ans, \
            text_07_Q2_corr, text_07_Q3, text_07_Q3_ans, text_07_Q3_corr, text_08, text_08_Q1, text_08_Q1_ans, text_08_Q1_corr, \
            text_08_Q2, text_08_Q2_ans, text_08_Q2_corr, text_08_Q3, text_08_Q3_ans, text_08_Q3_corr, text_09, text_09_Q1, \
            text_09_Q1_ans, text_09_Q1_corr, text_09_Q2, text_09_Q2_ans, text_09_Q2_corr, text_09_Q3, text_09_Q3_ans, \
            text_09_Q3_corr, text_10, text_10_Q1, text_10_Q1_ans, text_10_Q1_corr, text_10_Q2, text_10_Q2_ans, text_10_Q2_corr, \
            text_10_Q3, text_10_Q3_ans, text_10_Q3_corr, pseudo_text_01, pseudo_text_02, pseudo_text_03, pseudo_text_04, pseudo_text_05, \
            pseudo_text_06, pseudo_text_07, pseudo_text_08, pseudo_text_09)

        # import some additional functions I wrote for the experiment:
        # from EXNAT3_study_components import change_bg_colour
        from nback_colour_generator import create_nback_stimlist, draw_without_replacement, get_targets, create_0back_stimlist


        # build little function to flatten nested lists:
        def flatten_list(nested_list):
            flattened_list = []
            for item in nested_list:
                if isinstance(item, list):
                    flattened_list.extend(flatten_list(item))
                else:
                    flattened_list.append(item)
            return flattened_list


        # If I try to save strings containing escaped quotes in a csv file,
        # the format gets completely messed up. So we need to escape all
        # weird characters like quotes and backslashes with quotes (as odd as it sounds).
        def escape_quotes(string):
            # escape quotes with quotes instead of backslashes
            return string.replace('"', '""')


        # make mouse invisible during experiment
        # mouse = io.devices.mouse
        win.setMouseVisible(False)

        # create 10 ms timer that we can use instead of core.wait()
        my_timer = core.CountdownTimer(0.01)
    CodeComponent stimuli
      Code Type = Py
      Begin Experiment:
        ### Stimulus settings

        # set colours you want to use for background:
        # light_bg_col_hex = "#FDFBF0" # ivory instructions background
        # dark_bg_col_hex  = "#505050" # dark grey background for stimuli
        #light_bg_col = [(x / 127.5) - 1 for x in (253, 251, 240)]
        light_bg_col = [(x / 127.5) - 1 for x in (186, 186, 186)] # ivory instructions background (use RGB -1:1)
        dark_bg_col = [(x / 127.5) - 1 for x in (80, 80, 80)]  # dark grey background for stimuli (use RGB -1:1)

        # make background light for a start - use rgb -1:1 colour codes
        win.setColor(light_bg_col, colorSpace='rgb')

        # set colours you want to use for the stimuli:
        colours = ["#D292F3", "#F989A2", "#2AB7EF", "#88BA3F"]
        print("Preparing experiment with n-back colours:", colours)

        #  #D292F3 = weird lilac with a 2000s vibe
        #  #F989A2 = Barbie pink
        #  #2AB7EF = Twitter blue
        #  #88BA3F = medium grass green
        # (#D8A244 = dark curry-ish yellow --> excluded!)

        #   All colours have a luminance of 70 and a chroma of 74.

        #   The colours are selected for distinguishability (is that a word?!)
        #   for people with "normal" colour vision as well as for
        #   people with protanomaly (red olour vision deficiency (CVD)),
        #   deuteranomaly (green CVD) and
        #   tritanomaly (blue CVD).

        #   People with a "true" colour blindness
        #   (i.e. protanopia, deuteranopia, tritanopia)
        #   shouldn't participate in this study. */


        # ----------------------------------------------
        ### Shuffle order of texts
        print("shuffle texts")
        # collect the text IDs in lists so I know which text was shown
        all_main_texts_nrs_list = ["text_01", "text_02", "text_03", "text_04", "text_05", "text_06", "text_07", "text_08",
                                   "text_09", "text_10"]
        all_pseudotexts_nrs_list = ["pseudo_text_01", "pseudo_text_02", "pseudo_text_03", "pseudo_text_04", "pseudo_text_05",
                                    "pseudo_text_06", "pseudo_text_07", "pseudo_text_08", "pseudo_text_09"]
        # shuffle text numbers
        random.shuffle(all_main_texts_nrs_list)
        random.shuffle(all_pseudotexts_nrs_list)

        # only get first 5 texts for the main blocks
        all_main_texts_nrs_list = all_main_texts_nrs_list[0:5]

        # only get first text for pseudotext
        all_pseudotexts_nrs_list = all_pseudotexts_nrs_list[0:1]

        # append "empty" text numbers to the list where we have blocks that are not main blocks.
        all_texts_nrs_list = []

        # Loop through the range of the length of texts since it's the longer list
        for t_idx in range(len(all_main_texts_nrs_list)):
            # if it's the first text, it's the reading BL main block.
            if t_idx == 0:
                # Append 1 text for baseline reading
                all_texts_nrs_list.append(all_main_texts_nrs_list[t_idx])
                # Then append 1 text for pseudotext plus 4 empty blocks for n-back single task
                all_texts_nrs_list.extend([all_pseudotexts_nrs_list[0], "", "", "", ""])
            elif t_idx >= 1:
                # Then 4 reading blocks for dual task
                all_texts_nrs_list.append(all_main_texts_nrs_list[t_idx])

        # This will result in a list following your described logic
        print(all_texts_nrs_list)

        ### Set order of blocks
        print("set block order for runs")

        # RUN 1
        # always starts with single reading (BL + PS)
        single_reading = ["Reading_Baseline_main_no_click", "Reading_pseudotext_no_click"]

        run1_blocks = single_reading
        print("Blocks for run1:", run1_blocks)

        # RUN 2
        # then you get both single n-back conditions
        nback1 = ["1back_single_main_no_click", "2back_single_main_no_click"]
        random.shuffle(nback1)

        nback2 = ["1back_single_main_no_click", "2back_single_main_no_click"]
        random.shuffle(nback2)

        run2_blocks = nback1 + nback2
        print("Blocks for run2:", run2_blocks)

        # RUNS 3, 4, 5 & 6
        # one dual-task block per run, order randomized
        dual_blocks = ["1back_dual_main_no_click", "2back_dual_main_no_click", "1back_dual_main_no_click", "2back_dual_main_no_click"]

        random.shuffle(dual_blocks)

        run3_blocks = dual_blocks[0]
        run4_blocks = dual_blocks[1]
        run5_blocks = dual_blocks[2]
        run6_blocks = dual_blocks[3]

        print("Blocks for run3:", run3_blocks)
        print("Blocks for run4:", run4_blocks)
        print("Blocks for run5:", run5_blocks)
        print("Blocks for run6:", run6_blocks)

        ### Create n-back colour lists for all blocks

        print("create n-back colour lists")
        # There are 10 blocks in total
        # For run 1, 6 blocks (2 text blocks + 4 single n-back)
        # Run 2 and 3 each have 2 dual-task blocks with 300 stimuli each (50 targets)

        # So for every block, build a list with colour codes containing the right amount of targets.
        # The function is defined in another script bc it's super long,
        # I import it at the beginning of this script.

        # RUN 1
        # First, create list with length of all texts. The length of the blocks is
        # always in the same order, only the conditions change.
        blocks_textlen = [300, 100] # reading blocks
        blocks_target_counts = [25, 25]  # reading blocks

        # Now loop this list. Check which condition we have there and then create colour list for each text.
        run1_colour_lists = []
        run1_target_lists = []
        for block_idx, block_length in enumerate(blocks_textlen):
            # get 1st letter of block name - that tells us the condition
            block_cond = run1_blocks[block_idx][0]

            # for each condition, decide which n-back level we want to assign
            # For all no-n-back blocks, we use 1 (just for the colour list generation)
            # global curr_nback_level
            if block_cond == "R":
                curr_nback_level = 1
            elif block_cond == "1":
                curr_nback_level = 1
            else:
                curr_nback_level = 2

            # generate colour list for current block
            # global curr_colours
            curr_colours = create_nback_stimlist(nback_level=curr_nback_level,
                                                 colour_codes=colours,
                                                 story=["x"] * block_length,
                                                 target_abs_min=blocks_target_counts[block_idx],
                                                 target_abs_max=blocks_target_counts[block_idx],
                                                 zeroback_target=None)

            # get list of targets / non-targets
            curr_targets = get_targets(stim_list=curr_colours,
                                       nback_level=curr_nback_level)

            # add to bigger lists
            run1_colour_lists.append(curr_colours)
            run1_target_lists.append(curr_targets)

        # RUN 2
        blocks_textlen = [90, 90, 90, 90]  # single n-back blocks
        blocks_target_counts = [15, 15, 15, 15]

        # Now loop this list. Check which condition we have there and then create colour list for each text.
        run2_colour_lists = []
        run2_target_lists = []
        for block_idx, block_length in enumerate(blocks_textlen):
            # get 1st letter of block name - that tells us the condition
            block_cond = run2_blocks[block_idx][0]

            # for each condition, decide which n-back level we want to assign
            # For all no-n-back blocks, we use 1 (just for the colour list generation)
            # global curr_nback_level
            if block_cond == "R":
                curr_nback_level = 1
            elif block_cond == "1":
                curr_nback_level = 1
            else:
                curr_nback_level = 2

            # generate colour list for current block
            # global curr_colours
            curr_colours = create_nback_stimlist(nback_level=curr_nback_level,
                                                 colour_codes=colours,
                                                 story=["x"] * block_length,
                                                 target_abs_min=blocks_target_counts[block_idx],
                                                 target_abs_max=blocks_target_counts[block_idx],
                                                 zeroback_target=None)

            # get list of targets / non-targets
            curr_targets = get_targets(stim_list=curr_colours,
                                       nback_level=curr_nback_level)

            # add to bigger lists
            run2_colour_lists.append(curr_colours)
            run2_target_lists.append(curr_targets)

        # RUNS 3, 4, 5 & 6
        blocks_textlen = [300, 300, 300, 300] # dual-task blocks
        blocks_target_counts = [50, 50, 50, 50]  # dual-task blocks

        # Now loop this list. Check which condition we have there and then create colour list for each text.
        dual_blocks = run3_blocks + run4_blocks + run5_blocks + run6_blocks
        run3_4_5_6_colour_lists = []
        run3_4_5_6_target_lists = []
        for block_idx, block_length in enumerate(blocks_textlen):
            # get 1st letter of block name - that tells us the condition
            block_cond = dual_blocks[block_idx][0]

            # for each condition, decide which n-back level we want to assign
            # For all no-n-back blocks, we use 1 (just for the colour list generation)
            # global curr_nback_level
            if block_cond == "R":
                curr_nback_level = 1
            elif block_cond == "1":
                curr_nback_level = 1
            else:
                curr_nback_level = 2

            # generate colour list for current block
            # global curr_colours
            curr_colours = create_nback_stimlist(nback_level=curr_nback_level,
                                                 colour_codes=colours,
                                                 story=["x"] * block_length,
                                                 target_abs_min=blocks_target_counts[block_idx],
                                                 target_abs_max=blocks_target_counts[block_idx],
                                                 zeroback_target=None)

            # get list of targets / non-targets
            curr_targets = get_targets(stim_list=curr_colours,
                                       nback_level=curr_nback_level)

            # add to bigger lists
            run3_4_5_6_colour_lists.append(curr_colours)
            run3_4_5_6_target_lists.append(curr_targets)

        run3_colour_lists = run3_4_5_6_colour_lists[0]
        run4_colour_lists = run3_4_5_6_colour_lists[1]
        run5_colour_lists = run3_4_5_6_colour_lists[2]
        run6_colour_lists = run3_4_5_6_colour_lists[3]

        run3_target_lists = run3_4_5_6_target_lists[0]
        run4_target_lists = run3_4_5_6_target_lists[1]
        run5_target_lists = run3_4_5_6_target_lists[2]
        run6_target_lists = run3_4_5_6_target_lists[3]

        print("------ finished preparing stimuli! ------")

        # ------------------------------------------

        # init block counter for the whole experiment and for each run
        exp_block_counter = 0
        # init block counter for run1 (two blocks in total)
        run1_block_counter = 0
        # init block counter for run2 (four blocks in total)
        run2_block_counter = 0
        # init block counter for run3 (one block in total)
        run3_block_counter = 0
        # init block counter for run4 (one block in total)
        run4_block_counter = 0
        # init block counter for run5 (one block in total)
        run5_block_counter = 0
        # init block counter for run6 (one block in total)
        run6_block_counter = 0

        print("starting experiment now!")
    TextComponent empty_placeholder
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine end
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    CodeComponent end
      Code Type = Py
      Begin Routine:
        ### END OF EXPERIMENT:
        # keep background ivory
        win.setColor(light_bg_col, colorSpace='rgb')
        win.flip()

        ### Show message
        # set text
        instr_text = "Hervorragend!\n\n\nVielen Dank,\ndas Experiment ist nun zu Ende!"

        # create text box
        instr_text_stim = visual.TextStim(win,
                                          text = instr_text,
                                          height = 0.05,
                                          pos = (0, 0),
                                          color = "black")

        # display the text on screen until Space is pressed
        while True:
            # keep background ivory
            win.setColor(light_bg_col, colorSpace='rgb')
            instr_text_stim.draw()
            win.flip()
            # end screen if participant presses space
            if 'return' in event.getKeys():
                print("ending experiment now!")
                # end experiment
                break
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
  Routine single_reading
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    CodeComponent single_reading_blocks
      Code Type = Py
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      Begin Routine:
        #################################################
        #        Blocks with text – reading only        #
        #################################################
        # this routine is for all blocks with texts that are paced, i.e., visually presented without space bar

        if 0 <= exp_block_counter <= 1:
            #---------- Calculate duration of words based on task training ----------
            # We collected RTs & words from the self-paced block of each condition
            # for the training, we only use data from the reading BL since there is no separate training for 1- and 2-back

            RT_per_letter_baseline = int(expInfo['RT_per_letter_baseline'])
            print("Using RT_per_letter_baseline for this block:", RT_per_letter_baseline)

            # get block kind
            curr_block = run1_blocks[run1_block_counter]

            # keep background ivory
            win.setColor(light_bg_col, colorSpace='rgb')
            win.flip()

            # ----------------------------------

            # clear buffer of all previously recorded key events:
            event.clearEvents()

            ### specify settings for the current block
            ### Prepare stimuli:

            if curr_block in ["Reading_Baseline_main_no_click", "Reading_pseudotext_no_click"]:
                print(f"start preparing block {curr_block}")

                # keep background ivory
                win.setColor(light_bg_col, colorSpace='rgb')
                win.flip()

                ### Show instructions
                if curr_block == "Reading_Baseline_main_no_click":

                    # set instruction text
                    instr_text = locals()["instr_" + curr_block]
                    # create text box
                    instr_text_stim = visual.TextStim(win,
                                                      text=instr_text,
                                                      height=0.025,  # font height relative to height of screen
                                                      pos=(0, 0),  # move up a bit
                                                      color="black")

                    # show instructions on screen
                    win.setColor(light_bg_col, colorSpace='rgb')
                    instr_text_stim.draw()
                    win.flip()
                    core.wait(1)  # wait for 3s before starting response window

                    # get text nr:
                    curr_text_nr = all_texts_nrs_list[exp_block_counter]
                    curr_text = locals()[curr_text_nr]

                    # compute RTs using participant's average reading speed / letter
                    # we define a minimum and a maximum duration for each word
                    # the minimum is based on 5 x RT per letter in the respective condition
                    # the max duration is based on a time-out of 1.5 s in the reading baseline condition
                    minimum_duration = 5 * RT_per_letter_baseline
                    maximum_duration = 1500
                    curr_durations = []
                    for word in curr_text:
                        duration = RT_per_letter_baseline * math.log((len(word))) + 4 * RT_per_letter_baseline
                        if duration < maximum_duration:
                            curr_durations.append(max(duration, minimum_duration))
                        else:
                            curr_durations.append(maximum_duration)

                    # print(f"\tdurations for paced baseline block: {curr_durations}")

                    ### change background colour
                    win.setColor(dark_bg_col, colorSpace='rgb')
                    win.flip()

                    # show main block questions
                    skip_questions_paced = False

                elif curr_block == "Reading_pseudotext_no_click":

                    # set instruction text
                    instr_text = locals()["instr_" + curr_block]
                    # create text box
                    instr_text_stim = visual.TextStim(win,
                                                      text=instr_text,
                                                      height=0.025,  # font height relative to height of screen
                                                      pos=(0, 0),  # move up a bit
                                                      color="black")

                    # show instructions on screen
                    win.setColor(light_bg_col, colorSpace='rgb')
                    instr_text_stim.draw()
                    win.flip()
                    core.wait(1)  # wait for 3s before starting response window

                    # get text nr:
                    curr_text_nr = all_texts_nrs_list[exp_block_counter]
                    curr_text = locals()[curr_text_nr]

                    # compute RTs using participant's average reading speed / letter
                    # we define a minimum and a maximum duration for each word
                    # the minimum is based on 5 x RT per letter in the respective condition
                    # the max duration is based on a time-out of 1.5 s in the reading baseline condition
                    minimum_duration = 5 * RT_per_letter_baseline
                    maximum_duration = 1500
                    curr_durations = []
                    for word in curr_text:
                        duration = RT_per_letter_baseline * math.log((len(word))) + 4 * RT_per_letter_baseline
                        if duration < maximum_duration:
                            curr_durations.append(max(duration, minimum_duration))
                        else:
                            curr_durations.append(maximum_duration)

                    # print(f"\tdurations for paced baseline block: {curr_durations}")

                    ### change background colour
                    win.setColor(dark_bg_col, colorSpace='rgb')
                    win.flip()

                    # show main block questions
                    skip_questions_paced = True

                # Define n-back level
                curr_nback_cond = None

                print(f"\tcurrent n-back condition: {curr_nback_cond}")
                print(f"\tcurrent text: {curr_text_nr}")
                print(f"\texp block counter: {exp_block_counter}")

                # get list with targets & list with colours
                curr_targets = run1_target_lists[run1_block_counter]
                curr_colours = run1_colour_lists[run1_block_counter]

            ### Start block loop
            if curr_block in ["Reading_Baseline_main_no_click", "Reading_pseudotext_no_click"]:

                # create empty text stimulus
                stim = visual.TextStim(win=win,
                                       text=" ",
                                       pos=(0, 0),  # center stimulus
                                       font="Times New Roman",
                                       height=0.07)

                stim.draw()
                win.flip()

                # clear buffer of all previously recorded key events:
                event.clearEvents()

                # CREATE CLOCKS:
                my_block_clock = core.Clock()
                my_block_clock.reset()  # start block clock
                start_time = my_block_clock.getTime()  # get start time of block
                # also create trial clock
                my_trial_clock = core.Clock()

                # loop words in current text
                for trial_idx, curr_word in enumerate(curr_text):
                    # print("current idx: " + str(trial_idx) + ", curr word:" + curr_word)

                    ### prepare & show current word:
                    # get current colour
                    curr_colour = curr_colours[trial_idx]

                    # get duration for current word
                    curr_duration = curr_durations[trial_idx] / 1000  # convert ms to seconds
                    # print("duration for current word (in s):", curr_duration)

                    # get trial number (start counting from 1, so add 1)
                    curr_trial_nr = trial_idx + 1

                    # set current word & colour as content of text stimulus
                    stim.color = curr_colour
                    stim.text = curr_word

                    # show word on screen
                    stim.draw()  # draw word on screen

                    # start trial clock & record trial onset time
                    my_trial_clock.reset()
                    onset_time = my_trial_clock.getTime()

                    ### start recording responses
                    # start while loop that looks for responses
                    # --> end while loop only if duration for current word is over
                    while my_trial_clock.getTime() < (onset_time + curr_duration):

                        stim.draw()
                        win.flip()

                        # check for key responses:
                        keys = event.getKeys(['c', 'escape'])

                        # if there were, check responses:
                        for key in keys:

                            # if participant pressed button "c" for the first time and it's an n-back condition
                            # where they're actually supposed to do that (aka not a reading baseline condition)...
                            if key == 'c' and curr_nback_cond != None and saw_target == False:
                                # get reaction time
                                curr_nback_RT = my_trial_clock.getTime() * 1000
                                # send trigger for response:
                                # send_trigger("response_target")
                                # only get first target response, we don't care if they press the button more than once:
                                saw_target = True

                            # If esc is pressed, end the experiment:
                            elif key == 'escape':
                                # et_abort_exp()  # shut down eyetrigger and download incremental data
                                # close trigger & close experiment
                                # core.wait(time_after_trigger)
                                # parallel.setData(0)
                                core.wait(0.5)
                                core.quit()

                    ### end trial
                    print("\tend paced trial")
                    # stop display of current word & send trial offset trigger
                    # win.callOnFlip(send_trigger, "trial_offset")

                    # check whether response was hit, miss, false alarm or correct rejection
                    # they saw a target and there was one: hit
                    if curr_nback_cond != None:
                        if saw_target and curr_target:
                            curr_nback_response = "hit"
                        # they didn't see a target but there was one: miss
                        elif saw_target == False and curr_target:
                            curr_nback_response = "miss"
                            curr_nback_RT = None
                        # they didn't see a target and there was none: correct rejection
                        elif saw_target == False and curr_target == False:
                            curr_nback_response = "correct rejection"
                            curr_nback_RT = None
                        # they saw a target but there was none: false alarm
                        elif saw_target and curr_target == False:
                            curr_nback_response = "false alarm"
                    # if it wasn't an n-back task block:
                    else:
                        curr_target = None
                        curr_nback_response = None
                        curr_nback_RT = None

                    ### save everything in output csv
                    thisExp.addData('colour', curr_colour)
                    thisExp.addData('target', curr_target)
                    thisExp.addData('nback_response', curr_nback_response)
                    thisExp.addData('nback_RT', curr_nback_RT)  # in ms
                    thisExp.addData('duration', curr_duration * 1000)  # in ms
                    thisExp.addData('text_nr', curr_text_nr)
                    thisExp.addData('trial_nr', curr_trial_nr)
                    thisExp.addData('block_nr_exp', exp_block_counter)
                    thisExp.addData('run_nr', 'run1')
                    thisExp.addData('block_nr_run', run1_block_counter)
                    thisExp.addData('block_name', curr_block)
                    thisExp.addData('n-back_level', curr_nback_cond)
                    # careful, make sure quotes in the strings are escaped using a
                    # quote (weird, I know) so it's properly saved in the CSV:
                    thisExp.addData('word', escape_quotes(curr_word))

                    # start a new row in the csv
                    thisExp.nextEntry()

                    ### IF TESTING MODE ENABLED: end loop after 4 trials
                    if expInfo['testing_mode'] == "yes":
                        if trial_idx == 3:
                            break

                print("finished presenting trials")

                if curr_block == "Reading_pseudotext_no_click":
                    # show main block questions
                    skip_questions_paced = True

                    # go to next run
                    exp_block_counter += 1
                    run1_block_counter += 1
                    print(f"Going to block {exp_block_counter + 1}/10 in the experiment now!")
                    continueRoutine = False

                    # If there are still blocks left, go to next one.
                    # If not, end loop here:
                    if run1_block_counter == 2:
                        print(f"Finished block {run1_block_counter}/2 in run 1, moving on to next run!")
                        loop_run1_single_reading.finished = True

                # Send end of block trigger:
                # core.wait(time_after_trigger)  # wait 3 ms
                # send block offset trigger
                # send_trigger("block_offset")
    CodeComponent questions
      Code Type = Py
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      Begin Routine:
        ##########################################################
        #              Text Comprehension Questions              #
        ##########################################################

        def setup_question(question_text, answers_text):
            question = visual.TextStim(win, text=question_text, pos=(0, 0.2), color="black", height=0.025, anchorHoriz='center', alignText='center', wrapWidth=1)
            answers = [visual.TextStim(win, text=ans, pos=(-0.75, 0.1 - i * 0.05), color="black", height=0.025, wrapWidth=1.5, anchorHoriz='left', alignText='center') for i, ans in enumerate(answers_text)]
            return question, answers

        def display_question(question, answers):
            question.autoDraw = True
            for answer in answers:
                answer.autoDraw = True
            instr_text.autoDraw = True
            win.flip()

        def get_response(answers, correct_answer):
            while True:
                keys = defaultKeyboard.getKeys(['1', '2', '3', '4'])
                if keys:
                    key_name = keys[0].name  # Get the name of the first key pressed

                    # Now, use the key_name to determine the action
                    if key_name == '1':
                        index = 0  # Corresponds to the first choice
                    elif key_name == '2':
                        index = 1  # Corresponds to the second choice
                    elif key_name == '3':
                        index = 2  # Corresponds to the third choice
                    elif key_name == '4':
                        index = 3  # Corresponds to the fourth choice
                    else:
                        index = None  # Just in case, not really needed if you're sure about the input keys

                    # Proceed with your logic based on the index
                    if index is not None:
                        chosen_ans = chr(97 + index)  # Convert index to letter ('a', 'b', 'c', 'd')
                        is_correct = chosen_ans == correct_answer  # Assuming correct_answer is defined ('a', 'b', 'c', or 'd')
                        for i, answer in enumerate(answers):
                            answer.setColor("green" if i == index else "black")
                        win.flip()
                        core.wait(0.5)  # Ensure the color change is visible
                        break
            return chosen_ans, is_correct

        def reset_answers(answers):
            for answer in answers:
                answer.setColor("black")
            question.autoDraw = False
            instr_text.autoDraw = False
            for answer in answers:
                answer.autoDraw = False

        # Example usage:
        win.setColor(light_bg_col, colorSpace='rgb')
        win.flip()
        instr_text = visual.TextStim(win, text="(Bitte benutzen Sie die Tasten 1, 2, 3 und 4, um die richtige Antwort auszuwählen.)", color="grey", pos=(0, -0.3), wrapWidth=2, height=0.018)
        event.clearEvents()

        # Assuming skip_questions_paced and other variables are defined
        if not skip_questions_paced:
            # Setup for Q1
            Q1_text = locals()[curr_text_nr + "_Q1"]
            Q1_answers = locals()[curr_text_nr + "_Q1_ans"]
            Q1_correct = locals()[curr_text_nr + "_Q1_corr"]

            question, answers = setup_question(Q1_text, Q1_answers)
            display_question(question, answers)
            chosen_ans, is_correct = get_response(answers, Q1_correct)
            print(f"Chosen answer for Q1: {chosen_ans}, Correct: {is_correct}")
            reset_answers(answers)

            # save data:
            thisExp.addData('question', 'Q1')
            thisExp.addData('chosen_ans', chosen_ans)
            thisExp.addData('ans_correct', chosen_ans == Q1_correct)
            thisExp.addData('text_nr', curr_text_nr)
            thisExp.addData('block_nr', exp_block_counter)
            thisExp.addData('block_name', curr_block)
            thisExp.addData('block_kind', curr_nback_cond)

            # start a new row in the csv
            thisExp.nextEntry()

            # Setup for Q2
            Q2_text = locals()[curr_text_nr + "_Q2"]
            Q2_answers = locals()[curr_text_nr + "_Q2_ans"]
            Q2_correct = locals()[curr_text_nr + "_Q2_corr"]

            question, answers = setup_question(Q2_text, Q2_answers)
            display_question(question, answers)
            chosen_ans, is_correct = get_response(answers, Q2_correct)
            print(f"Chosen answer for Q2: {chosen_ans}, Correct: {is_correct}")
            reset_answers(answers)

            # save data:
            thisExp.addData('question', 'Q2')
            thisExp.addData('chosen_ans', chosen_ans)
            thisExp.addData('ans_correct', chosen_ans == Q2_correct)
            thisExp.addData('text_nr', curr_text_nr)
            thisExp.addData('block_nr', exp_block_counter)
            thisExp.addData('block_name', curr_block)
            thisExp.addData('block_kind', curr_nback_cond)

            # start a new row in the csv
            thisExp.nextEntry()

            # Setup for Q3
            Q3_text = locals()[curr_text_nr + "_Q3"]
            Q3_answers = locals()[curr_text_nr + "_Q3_ans"]
            Q3_correct = locals()[curr_text_nr + "_Q3_corr"]

            question, answers = setup_question(Q3_text, Q3_answers)
            display_question(question, answers)
            chosen_ans, is_correct = get_response(answers, Q3_correct)
            print(f"Chosen answer for Q3: {chosen_ans}, Correct: {is_correct}")
            reset_answers(answers)

            # save data:
            thisExp.addData('question', 'Q3')
            thisExp.addData('chosen_ans', chosen_ans)
            thisExp.addData('ans_correct', chosen_ans == Q3_correct)
            thisExp.addData('text_nr', curr_text_nr)
            thisExp.addData('block_nr', exp_block_counter)
            thisExp.addData('block_name', curr_block)
            thisExp.addData('block_kind', curr_nback_cond)

            # start a new row in the csv
            thisExp.nextEntry()

            # go to next block!
            exp_block_counter += 1
            run1_block_counter += 1
            print(f"Going to block {exp_block_counter + 1}/20 in the experiment now!")
            print(f"Going to block {run1_block_counter + 1}/2 in run 1 now!")
            continueRoutine = False

            # If there are still blocks left, go to next one.
            # If not, end loop here:
            if run1_block_counter == 2:
                loop_run1_single_reading.finished = True
  Routine single_nback
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    CodeComponent single_nback_blocks
      Code Type = Py
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      Begin Routine:
        #################################################
        #        Blocks w/o text – single n-back        #
        #################################################
        # this routine is for all blocks where there are
        # coloured rectangles instead of words and participants are presented with a paced version, i.e., rectangles are presented based on their reaction times in a

        if 2 <= exp_block_counter <= 5:

            event. Mouse(visible=False)
            # keep background ivory
            win.setColor(light_bg_col, colorSpace='rgb')
            win.flip()

            # clear buffer of all previously recorded key events:
            event.clearEvents()

            ### Prepare stimuli:

            RT_per_rectangle_oneback_single = int(expInfo['RT_per_rectangle_oneback_single'])
            RT_per_rectangle_twoback_single = int(expInfo['RT_per_rectangle_twoback_single'])

            # get block kind
            curr_block = run2_blocks[run2_block_counter]

            if curr_block in ["1back_single_main_no_click", "2back_single_main_no_click"]:
                print(f"start preparing block {curr_block}")
                if curr_block == "1back_single_main_no_click":
                    print("Using RT_per_rectangle_oneback for this block:", RT_per_rectangle_oneback_single)

                elif curr_block == "2back_single_main_no_click":
                    print("Using RT_per_rectangle_twoback for this block:", RT_per_rectangle_twoback_single)

                # keep background ivory
                win.setColor(light_bg_col, colorSpace='rgb')
                win.flip()

                ### Show instructions
                # set instruction text
                instr_text = locals()["instr_" + curr_block]
                # create text box
                instr_text_stim = visual.TextStim(win,
                                                  text=instr_text,
                                                  height=0.025,  # font height relative to height of screen
                                                  pos=(0, 0.2),  # move up a bit
                                                  color="black")
                # create ImageStim object
                curr_instr_pic = visual.ImageStim(win,
                                                  size=(0.8, 0.3),
                                                  pos=(0, -0.2),
                                                  image=locals()["instr_pic_" + curr_block])  # set path to image here

                # show instructions on screen
                instr_text_stim.draw()
                curr_instr_pic.draw()
                win.flip()
                core.wait(3)  # wait for 3s before starting response window

                ### change background colour
                win.setColor(dark_bg_col, colorSpace='rgb')
                win.flip()

                # get n-back condition:
                curr_nback_cond = curr_block[0]  # get first character of block name

                # if it is a 1 or a 2, set that as current n-back level:
                if curr_nback_cond in ['1', '2']:
                    curr_nback_cond == int(curr_nback_cond)
                # if it's neither 1 nor 2, it has to be a block without n-back,
                # so set curr_nback_cond to None
                else:
                    curr_nback_cond = None

                print(f"\tcurrent n-back condition: {curr_nback_cond}")

                # get list with targets & list with colours
                curr_targets = run2_target_lists[run2_block_counter]
                curr_colours = run2_colour_lists[run2_block_counter]

                # determine duration per rectangle for this block
                # we use average time per rectangle as duration here and add an increment over the duration of the block
                if curr_block == "1back_single_main_no_click":
                    curr_durations = []
                    for rect in curr_targets:
                        curr_durations.append(RT_per_rectangle_oneback_single)

                    # Latency factor of an incremental increase (increment per trial = 3 ms) added over duration of entire
                    # block assuming that participants get tired of the course of the block and thus need a bit more
                    # time:
                    # Increment of 3 ms per trial
                    increment_per_trial = 3
                    for i in range(len(curr_durations)):
                        # Calculate incremental increase for current trial
                        increment = i * increment_per_trial
                        # Add incremental increase to current trial's duration
                        curr_durations[i] += increment

                elif curr_block == "2back_single_main_no_click":
                    curr_durations = []
                    for rect in curr_targets:
                        curr_durations.append(RT_per_rectangle_twoback_single)

                    # Latency factor of an incremental increase (increment per trial = 3 ms) added over duration of entire
                    # block assuming that participants get tired of the course of the block and thus need a bit more
                    # time:
                    # Increment of 3 ms per trial
                    increment_per_trial = 3
                    for i in range(len(curr_durations)):
                        # Calculate incremental increase for current trial
                        increment = i * increment_per_trial
                        # Add incremental increase to current trial's duration
                        curr_durations[i] += increment

                ### Start block loop

                # CREATE CLOCKS:
                my_block_clock = core.Clock()
                my_block_clock.reset()  # start block clock
                start_time = my_block_clock.getTime()  # get start time of block
                # also create trial clock
                my_trial_clock = core.Clock()

                # create empty stimulus
                stim = visual.Rect(win=win,
                                   width=0.4,  # width = 3 * 1° visual angle (to make it look rectangle-ish)
                                   height=0.15,  # height = 1° visual angle (just like words)
                                   # colorSpace = "hex",
                                   pos=(0, 0))  # center stimulus

                stim.draw()
                win.flip()

                # clear buffer of all previously recorded key events:
                event.clearEvents()

                # loop colours in current text
                for trial_idx, curr_col in enumerate(curr_colours):
                    # print("current idx: " + str(trial_idx) + ", curr colour:" + curr_col)

                    ### prepare & show current trial:
                    my_trial_clock.reset()  # start trial clock
                    onset_time = my_trial_clock.getTime()

                    # if it's a block with an n-back task, prepare target list
                    if curr_nback_cond != None:
                        curr_target = curr_targets[trial_idx]
                        saw_target = False

                    # get duration for current trial
                    curr_duration = curr_durations[trial_idx] / 1000  # convert ms to seconds

                    # get trial number (start counting from 1, so add 1)
                    curr_trial_nr = trial_idx + 1

                    ### ISI: wait for 200 ms
                    while my_trial_clock.getTime() < 0.2:
                        win.flip()  # don't draw anything
                        core.wait(0.005)  # wait 5 ms before next iteration

                    # set current colour as colour of rectangle
                    stim.fillColor = curr_col

                    # draw stimulus on screen
                    stim.draw()
                    win.flip()

                    # show stimulus on screen & send trigger:
                    stim.draw()  # draw stimulus on screen
                    # update the window to clear the screen and display
                    # the stimulus

                    # start trial clock for measuring RTs from stimulus onset
                    my_trial_clock.reset()
                    onset_time = my_trial_clock.getTime()

                    ### start recording responses
                    # start "endless" while loop that looks for responses
                    # --> end while loop only if duration for current word is over
                    while my_trial_clock.getTime() < (onset_time + curr_duration):

                        # draw stimulus on screen
                        stim.draw()
                        win.flip()

                        # check for responses:
                        keys = event.getKeys(['c', 'escape'])

                        # check if there was a response. If there wasn't, we can go straight
                        # to the next iteration which will hopefully save us some dropped
                        # frames in the flicker.
                        for key in keys:

                            # if participant pressed button "c" for the first time and it's an n-back condition
                            # where they're actually supposed to do that (aka not a reading baseline condition)...
                            if key == 'c' and curr_nback_cond != None and saw_target == False:
                                # get reaction time
                                curr_nback_RT = my_trial_clock.getTime() * 1000
                                # send trigger for response:
                                # send_trigger("response_target")
                                # only get first target response, we don't care if they press the button more than once:
                                saw_target = True

                            # If esc is pressed, end the experiment:
                            elif key == 'escape':
                                # et_abort_exp()  # shut down eyetrigger and download incremental data
                                # close trigger & close experiment
                                # core.wait(time_after_trigger)
                                # parallel.setData(0)
                                core.wait(0.5)
                                core.quit()

                    ### end trial
                    print("end paced rect trial")

                    # check whether response was hit, miss, false alarm or correct rejection
                    # they saw a target and there was one: hit
                    if curr_nback_cond != None:
                        if saw_target and curr_target:
                            curr_nback_response = "hit"
                        # they didn't see a target but there was one: miss
                        elif saw_target == False and curr_target:
                            curr_nback_response = "miss"
                            curr_nback_RT = None
                        # they didn't see a target and there was none: correct rejection
                        elif saw_target == False and curr_target == False:
                            curr_nback_response = "correct rejection"
                            curr_nback_RT = None
                        # they saw a target but there was none: false alarm
                        elif saw_target and curr_target == False:
                            curr_nback_response = "false alarm"
                    # if it wasn't an n-back task block:
                    else:
                        curr_target = None
                        curr_nback_response = None
                        curr_nback_RT = None

                    ### save everything in output csv
                    thisExp.addData('colour', curr_col)
                    thisExp.addData('target', curr_target)
                    thisExp.addData('nback_response', curr_nback_response)
                    thisExp.addData('nback_RT', curr_nback_RT)  # in ms
                    thisExp.addData('duration', curr_duration)  # in ms
                    thisExp.addData('trial_nr', curr_trial_nr)
                    thisExp.addData('block_nr_exp', exp_block_counter)
                    thisExp.addData('run_nr', 'run2')
                    thisExp.addData('block_nr_run', run2_block_counter)
                    thisExp.addData('block_name', curr_block)
                    thisExp.addData('n-back_level', curr_nback_cond)

                    # start a new row in the csv
                    thisExp.nextEntry()

                    ### IF TESTING MODE ENABLED: end loop after 4 trials
                    if expInfo['testing_mode'] == "yes":
                        if trial_idx == 3:
                            break

                print("\t\tfinished presenting trials")

                # change background colour from grey (RGB: 10, 10, 10)
                # to ivory (RGB: 240, 223, 204)
                # win.setColor(light_bg_col, colorSpace='rgb')
                # win.flip()

                # add 1 to the block counter to go load the next block
                exp_block_counter += 1
                run2_block_counter += 1
                print(f"Going to block {exp_block_counter + 1}/10 in the experiment now!")
                continueRoutine = False

                # If there are still blocks left, go to next one.
                # If not, end loop here:
                if run2_block_counter == 4:
                    print(f"Finished block {run2_block_counter}/4 in run 2, moving on to next run!")
                    loop_run2_single_nback.finished = True
  Routine dual_task_block
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    CodeComponent dual_task
      Code Type = Py
      disabled = True
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      Begin Routine:
        #################################################
        #         Blocks with text – dual task          #
        #################################################
        # this routine is for all blocks with texts that are paced, i.e., visually presented without space bar

        if 6 <= exp_block_counter <= 7:
            # We collected RTs & words from the self-paced block of each condition
            RT_per_letter_oneback_dual = int(expInfo['RT_per_letter_oneback_dual'])
            RT_per_letter_twoback_dual = int(expInfo['RT_per_letter_twoback_dual'])

            # get block kind
            curr_block = run3_blocks[run3_block_counter]

            # clear buffer of all previously recorded key events:
            event.clearEvents()

            if curr_block in ["1back_dual_main_no_click", "2back_dual_main_no_click"]:
                print(f"Start preparing block {curr_block}")
                if curr_block == "1back_dual_main_no_click":
                    print("Using RT_per_letter_oneback_dual for this block:", RT_per_letter_oneback_dual)

                elif curr_block == "2back_dual_main_no_click":
                    print("Using RT_per_letter_twoback_dual for this block:", RT_per_letter_twoback_dual)

            ### Prepare stimuli:
            # keep background ivory
            win.setColor(light_bg_col, colorSpace='rgb')
            win.flip()

            # set instruction text
            instr_text = locals()["instr_" + curr_block]
            # create text box
            instr_text_stim = visual.TextStim(win,
                                              text=instr_text,
                                              height=0.025,  # font height relative to height of screen
                                              pos=(0, 0.2),  # move up a bit
                                              color="black")
            # create ImageStim object
            curr_instr_pic = visual.ImageStim(win,
                                              size=(0.8, 0.3),
                                              pos=(0, -0.2),
                                              image=locals()["instr_pic_" + curr_block])  # set path to image here

            # show instructions on screen
            win.setColor(light_bg_col, colorSpace='rgb')
            instr_text_stim.draw()
            curr_instr_pic.draw()
            win.flip()
            core.wait(3)  # wait for 3s before starting response window

            # Display the text on screen
            # while True:
            #     instr_text_stim.draw()
            #     curr_instr_pic.draw()
            #     win.flip()
            #     # end showing screen if participant presses space
            #     if 'space' in event.getKeys():
            #         break

            # get text nr:
            curr_text_nr = all_texts_nrs_list[exp_block_counter]
            curr_text = locals()[curr_text_nr]
            # compute RTs using participant's average reading speed / letter
            if curr_block == "1back_dual_main_no_click":
                # compute RTs using participant's average reading speed / letter
                # we define a minimum and a maximum duration for each word
                # the minimum is based on 5 x RT per letter in the respective condition
                # the max duration is based on a time-out of 2 s in the 1-back condition
                minimum_duration = 5 * RT_per_letter_oneback_dual
                maximum_duration = 2000
                curr_durations = []
                for word in curr_text:
                    duration = RT_per_letter_oneback_dual * math.log((len(word))) + 4 * RT_per_letter_oneback_dual
                    if duration < maximum_duration:
                        curr_durations.append(max(duration, minimum_duration))
                    else:
                        curr_durations.append(maximum_duration)

                # Latency factor of an incremental increase (increment per trial = 3 ms) added over duration of entire
                # block assuming that participants get tired of the course of a 300 words block and thus need a bit more
                # time:
                # Increment of 3 ms per trial
                increment_per_trial = 3
                for i in range(len(curr_durations)):
                    # Calculate incremental increase for current trial
                    increment = i * increment_per_trial
                    # Add incremental increase to current trial's duration
                    curr_durations[i] += increment

            elif curr_block == "2back_dual_main_no_click":
                minimum_duration = 5 * RT_per_letter_twoback_dual
                maximum_duration = 2000
                curr_durations = []
                for word in curr_text:
                    # this is an absolute value based on estimates of how long you need to feel comfortable reading a word on
                    # screen in a paced task
                    # duration = RT_per_letter_baseline * math.log((len(word))) + 300
                    # more flexible solution:
                    duration = RT_per_letter_twoback_dual * math.log((len(word))) + 4 * RT_per_letter_twoback_dual
                    if duration < maximum_duration:
                        curr_durations.append(max(duration, minimum_duration))
                    else:
                        curr_durations.append(maximum_duration)

                # Add increment of 3 ms per trial
                increment_per_trial = 3
                for i in range(len(curr_durations)):
                    # Calculate incremental increase for current trial
                    increment = i * increment_per_trial
                    # Add incremental increase to current trial's duration
                    curr_durations[i] += increment

            # print(f"\tdurations for paced n-back block: {curr_durations}")

            ### change background colour
            win.setColor(dark_bg_col, colorSpace='rgb')
            win.flip()

            # show main block questions
            skip_questions_paced = False

            # get n-back condition:
            curr_nback_cond = curr_block[0]  # get first character of block name

            # if it is a 1 or a 2, set that as current n-back level:
            if curr_nback_cond in ['1', '2']:
                curr_nback_cond == int(curr_nback_cond)
            # if it's neither 1 nor 2, it has to be a block without n-back,
            # so set curr_nback_cond to None
            else:
                curr_nback_cond = None

            print(f"\tCurrent n-back condition: {curr_nback_cond}")
            print(f"\tCurrent text: {curr_text_nr}")

            # get list with targets & list with colours
            curr_targets = run3_target_lists[run3_block_counter]
            curr_colours = run3_colour_lists[run3_block_counter]

            # create empty text stimulus
            stim = visual.TextStim(win=win,
                                   text=" ",
                                   pos=(0, 0),  # center stimulus
                                   font="Times New Roman",
                                   height=0.07)

            stim.draw()
            win.flip()

            # clear buffer of all previously recorded key events:
            event.clearEvents()

            # CREATE CLOCKS:
            my_block_clock = core.Clock()
            my_block_clock.reset()  # start block clock
            start_time = my_block_clock.getTime()  # get start time of block
            # also create trial clock
            my_trial_clock = core.Clock()

            # loop words in current text
            for trial_idx, curr_word in enumerate(curr_text):
                # print("current idx: " + str(trial_idx) + ", curr word:" + curr_word)

                ### prepare & show current word:

                # get current colour
                curr_colour = curr_colours[trial_idx]

                # if it's a block with an n-back task, prepare target list as well
                if curr_nback_cond != None:
                    curr_target = curr_targets[trial_idx]
                    saw_target = False

                # get duration for current word
                curr_duration = curr_durations[trial_idx] / 1000  # convert ms to seconds
                # print("duration for current word (in s):", curr_duration)

                # get trial number (start counting from 1, so add 1)
                curr_trial_nr = trial_idx + 1

                # set current word & colour as content of text stimulus
                stim.color = curr_colour
                stim.text = curr_word

                # show word on screen
                stim.draw()  # draw word on screen

                # start trial clock & record trial onset time
                my_trial_clock.reset()
                onset_time = my_trial_clock.getTime()

                ### wait for key response:
                # In blocks with n-back task, participants can press "c" to indicate they saw a target colour.

                ### start recording responses
                # start while loop that looks for responses
                # --> end while loop only if duration for current word is over
                while my_trial_clock.getTime() < (onset_time + curr_duration):

                    stim.draw()
                    win.flip()

                    # check for key responses:
                    keys = event.getKeys(['c', 'escape'])

                    # if there were, check responses:
                    for key in keys:

                        # if participant pressed button "c" for the first time and it's an n-back condition
                        # where they're actually supposed to do that (aka not a reading baseline condition)...
                        if key == 'c' and curr_nback_cond != None and saw_target == False:
                            # get reaction time
                            curr_nback_RT = my_trial_clock.getTime() * 1000
                            # send trigger for response:
                            # send_trigger("response_target")
                            # only get first target response, we don't care if they press the button more than once:
                            saw_target = True

                        # If esc is pressed, end the experiment:
                        elif key == 'escape':
                            # et_abort_exp()  # shut down eyetrigger and download incremental data
                            # close trigger & close experiment
                            # core.wait(time_after_trigger)
                            # parallel.setData(0)
                            core.wait(0.5)
                            core.quit()

                ### end trial
                print("\tend paced trial")
                # stop display of current word & send trial offset trigger
                # win.callOnFlip(send_trigger, "trial_offset")

                # check whether response was hit, miss, false alarm or correct rejection
                # they saw a target and there was one: hit
                if curr_nback_cond != None:
                    if saw_target and curr_target:
                        curr_nback_response = "hit"
                    # they didn't see a target but there was one: miss
                    elif saw_target == False and curr_target:
                        curr_nback_response = "miss"
                        curr_nback_RT = None
                    # they didn't see a target and there was none: correct rejection
                    elif saw_target == False and curr_target == False:
                        curr_nback_response = "correct rejection"
                        curr_nback_RT = None
                    # they saw a target but there was none: false alarm
                    elif saw_target and curr_target == False:
                        curr_nback_response = "false alarm"
                # if it wasn't an n-back task block:
                else:
                    curr_target = None
                    curr_nback_response = None
                    curr_nback_RT = None

                ### save everything in output csv
                thisExp.addData('colour', curr_colour)
                thisExp.addData('target', curr_target)
                thisExp.addData('nback_response', curr_nback_response)
                thisExp.addData('nback_RT', curr_nback_RT)  # in ms
                thisExp.addData('duration', curr_duration * 1000)  # in ms
                thisExp.addData('text_nr', curr_text_nr)
                thisExp.addData('trial_nr', curr_trial_nr)
                thisExp.addData('block_nr_exp', exp_block_counter)
                thisExp.addData('run_nr', 'run3')
                thisExp.addData('block_nr_run', run3_block_counter)
                thisExp.addData('block_name', curr_block)
                thisExp.addData('n-back_level', curr_nback_cond)
                # careful, make sure quotes in the strings are escaped using a
                # quote (weird, I know) so it's properly saved in the CSV:
                thisExp.addData('word', escape_quotes(curr_word))

                # start a new row in the csv
                thisExp.nextEntry()

                ### IF TESTING MODE ENABLED: end loop after 4 trials
                if expInfo['testing_mode'] == "yes":
                    if trial_idx == 3:
                        break

            print("finished presenting trials")

            # add 1 to the block counter to go load the next block
            # exp_block_counter += 1
            # run3_block_counter += 1
            # print(f"Going to block {exp_block_counter + 1}/10 in the experiment now!")
            # continueRoutine = False
            #
            # # If there are still blocks left, go to next one.
            # # If not, end loop here:
            # if run3_block_counter == 2:
            #     print(f"Finished block {run3_block_counter}/2 in run 3, moving on to next run!")
            #     # loop_dual_task_blocks.finished = True

            # Send end of block trigger:
            # core.wait(time_after_trigger)  # wait 3 ms
            # send block offset trigger
            # send_trigger("block_offset")

        elif 8 <= exp_block_counter <= 9:
            # We collected RTs & words from the self-paced block of each condition
            RT_per_letter_oneback_dual = int(expInfo['RT_per_letter_oneback_dual'])
            RT_per_letter_twoback_dual = int(expInfo['RT_per_letter_twoback_dual'])

            # get block kind
            curr_block = run4_blocks[run4_block_counter]

            # clear buffer of all previously recorded key events:
            event.clearEvents()

            if curr_block in ["1back_dual_main_no_click", "2back_dual_main_no_click"]:
                print(f"Start preparing block {curr_block}")
                if curr_block == "1back_dual_main_no_click":
                    print("Using RT_per_letter_oneback_dual for this block:", RT_per_letter_oneback_dual)

                elif curr_block == "2back_dual_main_no_click":
                    print("Using RT_per_letter_twoback_dual for this block:", RT_per_letter_twoback_dual)

            ### Prepare stimuli:
            # keep background ivory
            win.setColor(light_bg_col, colorSpace='rgb')
            win.flip()

            # set instruction text
            instr_text = locals()["instr_" + curr_block]
            # create text box
            instr_text_stim = visual.TextStim(win,
                                              text=instr_text,
                                              height=0.025,  # font height relative to height of screen
                                              pos=(0, 0.2),  # move up a bit
                                              color="black")
            # create ImageStim object
            curr_instr_pic = visual.ImageStim(win,
                                              size=(0.8, 0.3),
                                              pos=(0, -0.2),
                                              image=locals()["instr_pic_" + curr_block])  # set path to image here

            # show instructions on screen
            win.setColor(light_bg_col, colorSpace='rgb')
            instr_text_stim.draw()
            curr_instr_pic.draw()
            win.flip()
            core.wait(3)  # wait for 3s before starting response window

            # Display the text on screen
            # while True:
            #     instr_text_stim.draw()
            #     curr_instr_pic.draw()
            #     win.flip()
            #     # end showing screen if participant presses space
            #     if 'space' in event.getKeys():
            #         break

            # get text nr:
            curr_text_nr = all_texts_nrs_list[exp_block_counter]
            curr_text = locals()[curr_text_nr]
            # compute RTs using participant's average reading speed / letter
            if curr_block == "1back_dual_main_no_click":
                # compute RTs using participant's average reading speed / letter
                # we define a minimum and a maximum duration for each word
                # the minimum is based on 5 x RT per letter in the respective condition
                # the max duration is based on a time-out of 2 s in the 1-back condition
                minimum_duration = 5 * RT_per_letter_oneback_dual
                maximum_duration = 2000
                curr_durations = []
                for word in curr_text:
                    duration = RT_per_letter_oneback_dual * math.log((len(word))) + 4 * RT_per_letter_oneback_dual
                    if duration < maximum_duration:
                        curr_durations.append(max(duration, minimum_duration))
                    else:
                        curr_durations.append(maximum_duration)

                # Latency factor of an incremental increase (increment per trial = 3 ms) added over duration of entire
                # block assuming that participants get tired of the course of a 300 words block and thus need a bit more
                # time:
                # Increment of 3 ms per trial
                increment_per_trial = 3
                for i in range(len(curr_durations)):
                    # Calculate incremental increase for current trial
                    increment = i * increment_per_trial
                    # Add incremental increase to current trial's duration
                    curr_durations[i] += increment

            elif curr_block == "2back_dual_main_no_click":
                minimum_duration = 5 * RT_per_letter_twoback_dual
                maximum_duration = 2000
                curr_durations = []
                for word in curr_text:
                    # this is an absolute value based on estimates of how long you need to feel comfortable reading a word on
                    # screen in a paced task
                    # duration = RT_per_letter_baseline * math.log((len(word))) + 300
                    # more flexible solution:
                    duration = RT_per_letter_twoback_dual * math.log((len(word))) + 4 * RT_per_letter_twoback_dual
                    if duration < maximum_duration:
                        curr_durations.append(max(duration, minimum_duration))
                    else:
                        curr_durations.append(maximum_duration)

                # Add increment of 3 ms per trial
                increment_per_trial = 3
                for i in range(len(curr_durations)):
                    # Calculate incremental increase for current trial
                    increment = i * increment_per_trial
                    # Add incremental increase to current trial's duration
                    curr_durations[i] += increment

            # print(f"\tdurations for paced n-back block: {curr_durations}")

            ### change background colour
            win.setColor(dark_bg_col, colorSpace='rgb')
            win.flip()

            # show main block questions
            skip_questions_paced = False

            # get n-back condition:
            curr_nback_cond = curr_block[0]  # get first character of block name

            # if it is a 1 or a 2, set that as current n-back level:
            if curr_nback_cond in ['1', '2']:
                curr_nback_cond == int(curr_nback_cond)
            # if it's neither 1 nor 2, it has to be a block without n-back,
            # so set curr_nback_cond to None
            else:
                curr_nback_cond = None

            print(f"\tCurrent n-back condition: {curr_nback_cond}")
            print(f"\tCurrent text: {curr_text_nr}")

            # get list with targets & list with colours
            curr_targets = run4_target_lists[run4_block_counter]
            curr_colours = run4_colour_lists[run4_block_counter]

            # create empty text stimulus
            stim = visual.TextStim(win=win,
                                   text=" ",
                                   pos=(0, 0),  # center stimulus
                                   font="Times New Roman",
                                   height=0.07)

            stim.draw()
            win.flip()

            # clear buffer of all previously recorded key events:
            event.clearEvents()

            # CREATE CLOCKS:
            my_block_clock = core.Clock()
            my_block_clock.reset()  # start block clock
            start_time = my_block_clock.getTime()  # get start time of block
            # also create trial clock
            my_trial_clock = core.Clock()

            # loop words in current text
            for trial_idx, curr_word in enumerate(curr_text):
                # print("current idx: " + str(trial_idx) + ", curr word:" + curr_word)

                ### prepare & show current word:

                # get current colour
                curr_colour = curr_colours[trial_idx]

                # if it's a block with an n-back task, prepare target list as well
                if curr_nback_cond != None:
                    curr_target = curr_targets[trial_idx]
                    saw_target = False

                # get duration for current word
                curr_duration = curr_durations[trial_idx] / 1000  # convert ms to seconds
                # print("duration for current word (in s):", curr_duration)

                # get trial number (start counting from 1, so add 1)
                curr_trial_nr = trial_idx + 1

                # set current word & colour as content of text stimulus
                stim.color = curr_colour
                stim.text = curr_word

                # show word on screen
                stim.draw()  # draw word on screen

                # start trial clock & record trial onset time
                my_trial_clock.reset()
                onset_time = my_trial_clock.getTime()

                ### wait for key response:
                # In blocks with n-back task, participants can press "c" to indicate they saw a target colour.

                ### start recording responses
                # start while loop that looks for responses
                # --> end while loop only if duration for current word is over
                while my_trial_clock.getTime() < (onset_time + curr_duration):

                    stim.draw()
                    win.flip()

                    # check for key responses:
                    keys = event.getKeys(['c', 'escape'])

                    # if there were, check responses:
                    for key in keys:

                        # if participant pressed button "c" for the first time and it's an n-back condition
                        # where they're actually supposed to do that (aka not a reading baseline condition)...
                        if key == 'c' and curr_nback_cond != None and saw_target == False:
                            # get reaction time
                            curr_nback_RT = my_trial_clock.getTime() * 1000
                            # send trigger for response:
                            # send_trigger("response_target")
                            # only get first target response, we don't care if they press the button more than once:
                            saw_target = True

                        # If esc is pressed, end the experiment:
                        elif key == 'escape':
                            # et_abort_exp()  # shut down eyetrigger and download incremental data
                            # close trigger & close experiment
                            # core.wait(time_after_trigger)
                            # parallel.setData(0)
                            core.wait(0.5)
                            core.quit()

                ### end trial
                print("\tend paced trial")
                # stop display of current word & send trial offset trigger
                # win.callOnFlip(send_trigger, "trial_offset")

                # check whether response was hit, miss, false alarm or correct rejection
                # they saw a target and there was one: hit
                if curr_nback_cond != None:
                    if saw_target and curr_target:
                        curr_nback_response = "hit"
                    # they didn't see a target but there was one: miss
                    elif saw_target == False and curr_target:
                        curr_nback_response = "miss"
                        curr_nback_RT = None
                    # they didn't see a target and there was none: correct rejection
                    elif saw_target == False and curr_target == False:
                        curr_nback_response = "correct rejection"
                        curr_nback_RT = None
                    # they saw a target but there was none: false alarm
                    elif saw_target and curr_target == False:
                        curr_nback_response = "false alarm"
                # if it wasn't an n-back task block:
                else:
                    curr_target = None
                    curr_nback_response = None
                    curr_nback_RT = None

                ### save everything in output csv
                thisExp.addData('colour', curr_colour)
                thisExp.addData('target', curr_target)
                thisExp.addData('nback_response', curr_nback_response)
                thisExp.addData('nback_RT', curr_nback_RT)  # in ms
                thisExp.addData('duration', curr_duration * 1000)  # in ms
                thisExp.addData('text_nr', curr_text_nr)
                thisExp.addData('trial_nr', curr_trial_nr)
                thisExp.addData('block_nr_exp', exp_block_counter)
                thisExp.addData('run_nr', 'run4')
                thisExp.addData('block_nr_run', run4_block_counter)
                thisExp.addData('block_name', curr_block)
                thisExp.addData('n-back_level', curr_nback_cond)
                # careful, make sure quotes in the strings are escaped using a
                # quote (weird, I know) so it's properly saved in the CSV:
                thisExp.addData('word', escape_quotes(curr_word))

                # start a new row in the csv
                thisExp.nextEntry()

                ### IF TESTING MODE ENABLED: end loop after 4 trials
                if expInfo['testing_mode'] == "yes":
                    if trial_idx == 3:
                        break

            print("finished presenting trials")

            # # add 1 to the block counter to go load the next block
            # exp_block_counter += 1
            # run4_block_counter += 1
            # print(f"Going to block {exp_block_counter + 1}/10 in the experiment now!")
            # continueRoutine = False
            #
            # # If there are still blocks left, go to next one.
            # # If not, end loop here:
            # if run4_block_counter == 2:
            #     print(f"Finished block {run4_block_counter}/2 in run 4, moving on to next run!")
            #     loop_dual_task_blocks.finished = True

            # Send end of block trigger:
            # core.wait(time_after_trigger)  # wait 3 ms
            # send block offset trigger
            # send_trigger("block_offset")
    CodeComponent dual_task_alt
      Code Type = Py
      Begin Routine:
        def setup_instructions_and_stimuli(block_config, curr_instr, curr_instr_pic):
            """
            Setup and display instructions and stimuli based on the block configuration.
            """
            RT_per_letter = block_config['RT_per_letter']
            print(f"Start preparing block {block_config['name']}")
            print(f"\tUsing RT_per_letter for this block: {RT_per_letter}")

            # set light background
            win.setColor(light_bg_col, colorSpace='rgb')
            win.flip()

            # set instruction text
            instr_text = curr_instr
            # create text box
            instr_text_stim = visual.TextStim(win,
                                              text=instr_text,
                                              height=0.025,  # font height relative to height of screen
                                              pos=(0, 0.2),  # move up a bit
                                              color="black")
            # create ImageStim object
            instr_pic = visual.ImageStim(win,
                                              size=(0.8, 0.3),
                                              pos=(0, -0.2),
                                              image=curr_instr_pic)

            # show instructions on screen
            win.setColor(light_bg_col, colorSpace='rgb')
            instr_text_stim.draw()
            instr_pic.draw()
            win.flip()
            core.wait(3)  # wait for 3s before starting


        def calculate_durations(text, block_config):
            """
            Calculate word display durations based on the block configuration.
            """
            RT_per_letter = block_config['RT_per_letter']
            minimum_duration = 5 * RT_per_letter
            if block_config['name'][0] == '1':
                maximum_duration = 2000  # 2 seconds
            elif block_config['name'][0] == '2':
                maximum_duration = 2500 # 2.5 seconds
            increment_per_trial = 3
            curr_durations = []

            for i, word in enumerate(text):
                duration = RT_per_letter * math.log(len(word)) + 4 * RT_per_letter
                adjusted_duration = max(min(duration, maximum_duration), minimum_duration)
                adjusted_duration += i * increment_per_trial  # Adjust for incremental increase
                curr_durations.append(adjusted_duration)

            return curr_durations

        def process_block(block_config, curr_text, run_nr, block_nr_run, curr_block, curr_targets, curr_colours, curr_instr, curr_instr_pic):
            """
            Process each block based on its configuration.
            """
            setup_instructions_and_stimuli(block_config, curr_instr, curr_instr_pic)
            curr_durations = calculate_durations(curr_text, block_config)

            ### change background colour
            win.setColor(dark_bg_col, colorSpace='rgb')
            win.flip()

            # show main block questions
            skip_questions_paced = False

            # get n-back condition:
            curr_nback_cond = curr_block[0]  # get first character of block name

            # if it is a 1 or a 2, set that as current n-back level:
            if curr_nback_cond in ['1', '2']:
                curr_nback_cond == int(curr_nback_cond)
            # if it's neither 1 nor 2, it has to be a block without n-back,
            # so set curr_nback_cond to None
            else:
                curr_nback_cond = None

            print(f"\tCurrent n-back condition: {curr_nback_cond}")
            print(f"\tCurrent text: {curr_text_nr}")

            # create empty text stimulus
            stim = visual.TextStim(win=win,
                                   text=" ",
                                   pos=(0, 0),  # center stimulus
                                   font="Times New Roman",
                                   height=0.07)

            stim.draw()
            win.flip()

            # clear buffer of all previously recorded key events:
            event.clearEvents()

            # CREATE CLOCKS:
            my_block_clock = core.Clock()
            my_block_clock.reset()  # start block clock
            start_time = my_block_clock.getTime()  # get start time of block
            # also create trial clock
            my_trial_clock = core.Clock()

            # loop words in current text
            for trial_idx, curr_word in enumerate(curr_text):
                # print("current idx: " + str(trial_idx) + ", curr word:" + curr_word)

                ### prepare & show current word:

                # get current colour
                curr_colour = curr_colours[trial_idx]

                # if it's a block with an n-back task, prepare target list as well
                if curr_nback_cond != None:
                    curr_target = curr_targets[trial_idx]
                    saw_target = False

                # get duration for current word
                curr_duration = curr_durations[trial_idx] / 1000  # convert ms to seconds
                # print("duration for current word (in s):", curr_duration)

                # get trial number (start counting from 1, so add 1)
                curr_trial_nr = trial_idx + 1

                # set current word & colour as content of text stimulus
                stim.color = curr_colour
                stim.text = curr_word

                # show word on screen
                stim.draw()  # draw word on screen

                # start trial clock & record trial onset time
                my_trial_clock.reset()
                onset_time = my_trial_clock.getTime()

                ### wait for key response:
                # In blocks with n-back task, participants can press "c" to indicate they saw a target colour.

                ### start recording responses
                # start while loop that looks for responses
                # --> end while loop only if duration for current word is over
                while my_trial_clock.getTime() < (onset_time + curr_duration):

                    stim.draw()
                    win.flip()

                    # check for key responses:
                    keys = event.getKeys(['c', 'escape'])

                    # if there were, check responses:
                    for key in keys:

                        # if participant pressed button "c" for the first time and it's an n-back condition
                        # where they're actually supposed to do that (aka not a reading baseline condition)...
                        if key == 'c' and curr_nback_cond != None and saw_target == False:
                            # get reaction time
                            curr_nback_RT = my_trial_clock.getTime() * 1000
                            # send trigger for response:
                            # send_trigger("response_target")
                            # only get first target response, we don't care if they press the button more than once:
                            saw_target = True

                        # If esc is pressed, end the experiment:
                        elif key == 'escape':
                            # et_abort_exp()  # shut down eyetrigger and download incremental data
                            # close trigger & close experiment
                            # core.wait(time_after_trigger)
                            # parallel.setData(0)
                            core.wait(0.5)
                            core.quit()

                ### end trial
                print("\tend paced trial")
                # stop display of current word & send trial offset trigger
                # win.callOnFlip(send_trigger, "trial_offset")

                # check whether response was hit, miss, false alarm or correct rejection
                # they saw a target and there was one: hit
                if curr_nback_cond != None:
                    if saw_target and curr_target:
                        curr_nback_response = "hit"
                    # they didn't see a target but there was one: miss
                    elif saw_target == False and curr_target:
                        curr_nback_response = "miss"
                        curr_nback_RT = None
                    # they didn't see a target and there was none: correct rejection
                    elif saw_target == False and curr_target == False:
                        curr_nback_response = "correct rejection"
                        curr_nback_RT = None
                    # they saw a target but there was none: false alarm
                    elif saw_target and curr_target == False:
                        curr_nback_response = "false alarm"
                # if it wasn't an n-back task block:
                else:
                    curr_target = None
                    curr_nback_response = None
                    curr_nback_RT = None

                ### save everything in output csv
                thisExp.addData('colour', curr_colour)
                thisExp.addData('target', curr_target)
                thisExp.addData('nback_response', curr_nback_response)
                thisExp.addData('nback_RT', curr_nback_RT)  # in ms
                thisExp.addData('duration', curr_duration * 1000)  # in ms
                thisExp.addData('text_nr', curr_text_nr)
                thisExp.addData('trial_nr', curr_trial_nr)
                thisExp.addData('block_nr_exp', exp_block_counter)
                thisExp.addData('run_nr', run_nr)
                thisExp.addData('block_nr_run', block_nr_run)
                thisExp.addData('block_name', curr_block)
                thisExp.addData('n-back_level', curr_nback_cond)
                # careful, make sure quotes in the strings are escaped using a
                # quote (weird, I know) so it's properly saved in the CSV:
                thisExp.addData('word', escape_quotes(curr_word))

                # start a new row in the csv
                thisExp.nextEntry()

                ### IF TESTING MODE ENABLED: end loop after 4 trials
                if expInfo['testing_mode'] == "yes":
                    if trial_idx == 3:
                        break

            print("finished presenting trials")


        # Block configurations
        block_configs = {
            "1back_dual_main_no_click": {
                "name": "1back_dual_main_no_click",
                "RT_per_letter": int(expInfo['RT_per_letter_oneback_dual']),
                # Add other block-specific configurations or parameters here
            },
            "2back_dual_main_no_click": {
                "name": "2back_dual_main_no_click",
                "RT_per_letter": int(expInfo['RT_per_letter_twoback_dual']),
                # Add other block-specific configurations or parameters here
            }
        }

        if exp_block_counter == 6:
            run_nr = 3
            block_nr_run = run3_block_counter + 1
            curr_block = run3_blocks
            curr_targets = run3_target_lists
            curr_colours = run3_colour_lists
            block_config = block_configs.get(curr_block)

            if block_config:
                curr_text_nr = all_texts_nrs_list[exp_block_counter]
                curr_text = locals()[curr_text_nr]  # Assuming this retrieves the text for the current block
                curr_instr = locals()["instr_" + block_config['name']]
                curr_instr_pic = locals()["instr_pic_" + block_config['name']]  # set path to image here

                # show main block questions
                skip_questions_paced = False
                process_block(block_config, curr_text, run_nr, block_nr_run, curr_block, curr_targets, curr_colours, curr_instr, curr_instr_pic)
                # continueRoutine = False
            else:
                print("Error: Block configuration not found.")

        elif exp_block_counter == 7:
            run_nr = 4
            block_nr_run = run4_block_counter + 1
            curr_block = run4_blocks
            curr_targets = run4_target_lists
            curr_colours = run4_colour_lists
            block_config = block_configs.get(curr_block)

            if block_config:
                curr_text_nr = all_texts_nrs_list[exp_block_counter]
                curr_text = locals()[curr_text_nr]  # Assuming this retrieves the text for the current block
                curr_instr = locals()["instr_" + block_config['name']]
                curr_instr_pic = locals()["instr_pic_" + block_config['name']]  # set path to image here

                skip_questions_paced = False
                process_block(block_config, curr_text, run_nr, block_nr_run, curr_block, curr_targets, curr_colours, curr_instr, curr_instr_pic)
                # continueRoutine = False
            else:
                print("Error: Block configuration not found.")

        elif exp_block_counter == 8:
            run_nr = 5
            block_nr_run = run5_block_counter + 1
            curr_block = run5_blocks
            curr_targets = run5_target_lists
            curr_colours = run5_colour_lists
            block_config = block_configs.get(curr_block)

            if block_config:
                curr_text_nr = all_texts_nrs_list[exp_block_counter]
                curr_text = locals()[curr_text_nr]  # Assuming this retrieves the text for the current block
                curr_instr = locals()["instr_" + block_config['name']]
                curr_instr_pic = locals()["instr_pic_" + block_config['name']]  # set path to image here

                skip_questions_paced = False
                process_block(block_config, curr_text, run_nr, block_nr_run, curr_block, curr_targets, curr_colours, curr_instr, curr_instr_pic)
                # continueRoutine = False
            else:
                print("Error: Block configuration not found.")

        elif exp_block_counter == 9:
            run_nr = 6
            block_nr_run = run6_block_counter + 1
            curr_block = run6_blocks
            curr_targets = run6_target_lists
            curr_colours = run6_colour_lists
            block_config = block_configs.get(curr_block)

            if block_config:
                curr_text_nr = all_texts_nrs_list[exp_block_counter]
                curr_text = locals()[curr_text_nr]  # Assuming this retrieves the text for the current block
                curr_instr = locals()["instr_" + block_config['name']]
                curr_instr_pic = locals()["instr_pic_" + block_config['name']]  # set path to image here

                skip_questions_paced = False
                process_block(block_config, curr_text, run_nr, block_nr_run, curr_block, curr_targets, curr_colours, curr_instr, curr_instr_pic)
                # continueRoutine = False
            else:
                print("Error: Block configuration not found.")
    CodeComponent questions_dual_task
      Code Type = Py
      disabled = True
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      Begin Routine:
        ##########################################################
        #              Text Comprehension Questions              #
        ##########################################################

        def setup_question(question_text, answers_text):
            question = visual.TextStim(win, text=question_text, pos=(0, 0.2), color="black", height=0.025, anchorHoriz='center', alignText='center', wrapWidth=1)
            answers = [visual.TextStim(win, text=ans, pos=(-0.75, 0.1 - i * 0.05), color="black", height=0.025, wrapWidth=1.5, anchorHoriz='left', alignText='center') for i, ans in enumerate(answers_text)]
            return question, answers

        def display_question(question, answers):
            question.autoDraw = True
            for answer in answers:
                answer.autoDraw = True
            instr_text.autoDraw = True
            win.flip()

        def get_response(answers, correct_answer):
            while True:
                keys = defaultKeyboard.getKeys(['1', '2', '3', '4'])
                if keys:
                    key_name = keys[0].name  # Get the name of the first key pressed

                    # Now, use the key_name to determine the action
                    if key_name == '1':
                        index = 0  # Corresponds to the first choice
                    elif key_name == '2':
                        index = 1  # Corresponds to the second choice
                    elif key_name == '3':
                        index = 2  # Corresponds to the third choice
                    elif key_name == '4':
                        index = 3  # Corresponds to the fourth choice
                    else:
                        index = None  # Just in case, not really needed if you're sure about the input keys

                    # Proceed with your logic based on the index
                    if index is not None:
                        chosen_ans = chr(97 + index)  # Convert index to letter ('a', 'b', 'c', 'd')
                        is_correct = chosen_ans == correct_answer  # Assuming correct_answer is defined ('a', 'b', 'c', or 'd')
                        for i, answer in enumerate(answers):
                            answer.setColor("green" if i == index else "black")
                        win.flip()
                        core.wait(0.5)  # Ensure the color change is visible
                        break
            return chosen_ans, is_correct

        def reset_answers(answers):
            for answer in answers:
                answer.setColor("black")
            question.autoDraw = False
            instr_text.autoDraw = False
            for answer in answers:
                answer.autoDraw = False

        # Example usage:
        win.setColor(light_bg_col, colorSpace='rgb')
        win.flip()
        instr_text = visual.TextStim(win, text="(Bitte benutzen Sie die Tasten 1, 2, 3 und 4, um die richtige Antwort auszuwählen.)", color="grey", pos=(0, -0.3), wrapWidth=2, height=0.018)
        event.clearEvents()

        # Assuming skip_questions_paced and other variables are defined
        if not skip_questions_paced:
            # this is run 3:
            if 6 <= exp_block_counter <= 7:
                # Setup for Q1
                Q1_text = locals()[curr_text_nr + "_Q1"]
                Q1_answers = locals()[curr_text_nr + "_Q1_ans"]
                Q1_correct = locals()[curr_text_nr + "_Q1_corr"]

                question, answers = setup_question(Q1_text, Q1_answers)
                display_question(question, answers)
                chosen_ans, is_correct = get_response(answers, Q1_correct)
                print(f"Chosen answer for Q1: {chosen_ans}, Correct: {is_correct}")
                reset_answers(answers)

                # save data:
                thisExp.addData('question', 'Q1')
                thisExp.addData('chosen_ans', chosen_ans)
                thisExp.addData('ans_correct', chosen_ans == Q1_correct)
                thisExp.addData('text_nr', curr_text_nr)
                thisExp.addData('block_nr_exp', exp_block_counter)
                thisExp.addData('run_nr', 'run3')
                thisExp.addData('block_nr_run', run3_block_counter)
                thisExp.addData('block_name', curr_block)
                thisExp.addData('n-back_level', curr_nback_cond)

                # start a new row in the csv
                thisExp.nextEntry()

                # Setup for Q2
                Q2_text = locals()[curr_text_nr + "_Q2"]
                Q2_answers = locals()[curr_text_nr + "_Q2_ans"]
                Q2_correct = locals()[curr_text_nr + "_Q2_corr"]

                question, answers = setup_question(Q2_text, Q2_answers)
                display_question(question, answers)
                chosen_ans, is_correct = get_response(answers, Q2_correct)
                print(f"Chosen answer for Q2: {chosen_ans}, Correct: {is_correct}")
                reset_answers(answers)

                # save data:
                thisExp.addData('question', 'Q2')
                thisExp.addData('chosen_ans', chosen_ans)
                thisExp.addData('ans_correct', chosen_ans == Q2_correct)
                thisExp.addData('text_nr', curr_text_nr)
                thisExp.addData('block_nr_exp', exp_block_counter)
                thisExp.addData('run_nr', 'run3')
                thisExp.addData('block_nr_run', run3_block_counter)
                thisExp.addData('block_name', curr_block)
                thisExp.addData('n-back_level', curr_nback_cond)

                # start a new row in the csv
                thisExp.nextEntry()

                # Setup for Q3
                Q3_text = locals()[curr_text_nr + "_Q3"]
                Q3_answers = locals()[curr_text_nr + "_Q3_ans"]
                Q3_correct = locals()[curr_text_nr + "_Q3_corr"]

                question, answers = setup_question(Q3_text, Q3_answers)
                display_question(question, answers)
                chosen_ans, is_correct = get_response(answers, Q3_correct)
                print(f"Chosen answer for Q3: {chosen_ans}, Correct: {is_correct}")
                reset_answers(answers)

                # save data:
                thisExp.addData('question', 'Q3')
                thisExp.addData('chosen_ans', chosen_ans)
                thisExp.addData('ans_correct', chosen_ans == Q3_correct)
                thisExp.addData('text_nr', curr_text_nr)
                thisExp.addData('block_nr_exp', exp_block_counter)
                thisExp.addData('run_nr', 'run3')
                thisExp.addData('block_nr_run', run3_block_counter)
                thisExp.addData('block_name', curr_block)
                thisExp.addData('n-back_level', curr_nback_cond)

                # start a new row in the csv
                thisExp.nextEntry()

                exp_block_counter += 1
                run3_block_counter += 1
                print(f"Going to block {exp_block_counter + 1}/10 in the experiment now!")
                continueRoutine = False

                # If there are still blocks left, go to next one.
                # If not, end loop here:
                if run3_block_counter == 2:
                    print(f"Finished block {run3_block_counter}/2 in run 3, moving on to next run!")
                    # loop_dual_task_blocks.finished = True

                    # keep background ivory
                    win.setColor(light_bg_col, colorSpace='rgb')
                    win.flip()

                    run_finished_text = "Diese Runde des Experiments ist nun zu Ende. Bitte bleiben Sie ruhig liegen, es geht gleich weiter."
                    # set text
                    instr_text = run_finished_text
                    # create text box
                    instr_text_stim = visual.TextStim(win,
                                                      text=instr_text,
                                                      height=0.05,
                                                      pos=(0, 0),
                                                      color="black")

                    # display the text on screen until Space is pressed
                    while True:
                        # keep background ivory
                        win.setColor(light_bg_col, colorSpace='rgb')
                        instr_text_stim.draw()
                        win.flip()
                        # end screen if participant presses space
                        if 'return' in event.getKeys():
                            print("moving on to next run!")
                            break

            # this is run 4:
            elif 8 <= exp_block_counter <= 9:

                # Setup for Q1
                Q1_text = locals()[curr_text_nr + "_Q1"]
                Q1_answers = locals()[curr_text_nr + "_Q1_ans"]
                Q1_correct = locals()[curr_text_nr + "_Q1_corr"]

                question, answers = setup_question(Q1_text, Q1_answers)
                display_question(question, answers)
                chosen_ans, is_correct = get_response(answers, Q1_correct)
                print(f"Chosen answer for Q1: {chosen_ans}, Correct: {is_correct}")
                reset_answers(answers)

                # save data:
                thisExp.addData('question', 'Q1')
                thisExp.addData('chosen_ans', chosen_ans)
                thisExp.addData('ans_correct', chosen_ans == Q1_correct)
                thisExp.addData('text_nr', curr_text_nr)
                thisExp.addData('block_nr_exp', exp_block_counter)
                thisExp.addData('run_nr', 'run3')
                thisExp.addData('block_nr_run', run4_block_counter)
                thisExp.addData('block_name', curr_block)
                thisExp.addData('n-back_level', curr_nback_cond)

                # start a new row in the csv
                thisExp.nextEntry()

                # Setup for Q2
                Q2_text = locals()[curr_text_nr + "_Q2"]
                Q2_answers = locals()[curr_text_nr + "_Q2_ans"]
                Q2_correct = locals()[curr_text_nr + "_Q2_corr"]

                question, answers = setup_question(Q2_text, Q2_answers)
                display_question(question, answers)
                chosen_ans, is_correct = get_response(answers, Q2_correct)
                print(f"Chosen answer for Q2: {chosen_ans}, Correct: {is_correct}")
                reset_answers(answers)

                # save data:
                thisExp.addData('question', 'Q2')
                thisExp.addData('chosen_ans', chosen_ans)
                thisExp.addData('ans_correct', chosen_ans == Q2_correct)
                thisExp.addData('text_nr', curr_text_nr)
                thisExp.addData('block_nr_exp', exp_block_counter)
                thisExp.addData('run_nr', 'run3')
                thisExp.addData('block_nr_run', run4_block_counter)
                thisExp.addData('block_name', curr_block)
                thisExp.addData('n-back_level', curr_nback_cond)

                # start a new row in the csv
                thisExp.nextEntry()

                # Setup for Q3
                Q3_text = locals()[curr_text_nr + "_Q3"]
                Q3_answers = locals()[curr_text_nr + "_Q3_ans"]
                Q3_correct = locals()[curr_text_nr + "_Q3_corr"]

                question, answers = setup_question(Q3_text, Q3_answers)
                display_question(question, answers)
                chosen_ans, is_correct = get_response(answers, Q3_correct)
                print(f"Chosen answer for Q3: {chosen_ans}, Correct: {is_correct}")
                reset_answers(answers)

                # save data:
                thisExp.addData('question', 'Q3')
                thisExp.addData('chosen_ans', chosen_ans)
                thisExp.addData('ans_correct', chosen_ans == Q3_correct)
                thisExp.addData('text_nr', curr_text_nr)
                thisExp.addData('block_nr_exp', exp_block_counter)
                thisExp.addData('run_nr', 'run3')
                thisExp.addData('block_nr_run', run4_block_counter)
                thisExp.addData('block_name', curr_block)
                thisExp.addData('n-back_level', curr_nback_cond)

                # start a new row in the csv
                thisExp.nextEntry()

                # add 1 to the block counter to go load the next block
                exp_block_counter += 1
                run4_block_counter += 1
                print(f"Going to block {exp_block_counter + 1}/10 in the experiment now!")
                continueRoutine = False

                # If there are still blocks left, go to next one.
                # If not, end loop here:
                if run4_block_counter == 2:
                    print(f"Finished block {run4_block_counter}/2 in run 4, moving on to next run!")
                    loop_dual_task_blocks.finished = True
    CodeComponent questions_dual_task_alt
      Code Type = Py
      Begin Routine:
        ##########################################################
        #              Text Comprehension Questions              #
        ##########################################################

        def setup_question(question_text, answers_text):
            question = visual.TextStim(win, text=question_text, pos=(0, 0.2), color="black", height=0.025, anchorHoriz='center', alignText='center', wrapWidth=1)
            answers = [visual.TextStim(win, text=ans, pos=(-0.75, 0.1 - i * 0.05), color="black", height=0.025, wrapWidth=1.5, anchorHoriz='left', alignText='center') for i, ans in enumerate(answers_text)]
            return question, answers

        def display_question(question, answers):
            question.autoDraw = True
            for answer in answers:
                answer.autoDraw = True
            instr_text.autoDraw = True
            win.flip()

        def get_response(answers, correct_answer):
            while True:
                keys = defaultKeyboard.getKeys(['1', '2', '3', '4'])
                if keys:
                    key_name = keys[0].name  # Get the name of the first key pressed

                    # Now, use the key_name to determine the action
                    if key_name == '1':
                        index = 0  # Corresponds to the first choice
                    elif key_name == '2':
                        index = 1  # Corresponds to the second choice
                    elif key_name == '3':
                        index = 2  # Corresponds to the third choice
                    elif key_name == '4':
                        index = 3  # Corresponds to the fourth choice
                    else:
                        index = None  # Just in case, not really needed if you're sure about the input keys

                    # Proceed with your logic based on the index
                    if index is not None:
                        chosen_ans = chr(97 + index)  # Convert index to letter ('a', 'b', 'c', 'd')
                        is_correct = chosen_ans == correct_answer  # Assuming correct_answer is defined ('a', 'b', 'c', or 'd')
                        for i, answer in enumerate(answers):
                            answer.setColor("green" if i == index else "black")
                        win.flip()
                        core.wait(0.5)  # Ensure the color change is visible
                        break
            return chosen_ans, is_correct

        def reset_answers(answers):
            for answer in answers:
                answer.setColor("black")
            question.autoDraw = False
            instr_text.autoDraw = False
            for answer in answers:
                answer.autoDraw = False

        # Start displaying questions
        win.setColor(light_bg_col, colorSpace='rgb')
        win.flip()
        instr_text = visual.TextStim(win, text="(Bitte benutzen Sie die Tasten 1, 2, 3 und 4, um die richtige Antwort auszuwählen.)", color="grey", pos=(0, -0.3), wrapWidth=2, height=0.018)
        event.clearEvents()

        # Assuming skip_questions_paced and other variables are defined
        if not skip_questions_paced:
            # Setup for Q1
            Q1_text = locals()[curr_text_nr + "_Q1"]
            Q1_answers = locals()[curr_text_nr + "_Q1_ans"]
            Q1_correct = locals()[curr_text_nr + "_Q1_corr"]

            question, answers = setup_question(Q1_text, Q1_answers)
            display_question(question, answers)
            chosen_ans, is_correct = get_response(answers, Q1_correct)
            print(f"Chosen answer for Q1: {chosen_ans}, Correct: {is_correct}")
            reset_answers(answers)

            # save data:
            thisExp.addData('question', 'Q1')
            thisExp.addData('chosen_ans', chosen_ans)
            thisExp.addData('ans_correct', chosen_ans == Q1_correct)
            thisExp.addData('text_nr', curr_text_nr)
            thisExp.addData('block_nr_exp', exp_block_counter)
            thisExp.addData('run_nr', run_nr)
            thisExp.addData('block_nr_run', block_nr_run)
            thisExp.addData('block_name', curr_block)
            thisExp.addData('n-back_level', curr_nback_cond)

            # start a new row in the csv
            thisExp.nextEntry()

            # Setup for Q2
            Q2_text = locals()[curr_text_nr + "_Q2"]
            Q2_answers = locals()[curr_text_nr + "_Q2_ans"]
            Q2_correct = locals()[curr_text_nr + "_Q2_corr"]

            question, answers = setup_question(Q2_text, Q2_answers)
            display_question(question, answers)
            chosen_ans, is_correct = get_response(answers, Q2_correct)
            print(f"Chosen answer for Q2: {chosen_ans}, Correct: {is_correct}")
            reset_answers(answers)

            # save data:
            thisExp.addData('question', 'Q2')
            thisExp.addData('chosen_ans', chosen_ans)
            thisExp.addData('ans_correct', chosen_ans == Q2_correct)
            thisExp.addData('text_nr', curr_text_nr)
            thisExp.addData('block_nr_exp', exp_block_counter)
            thisExp.addData('run_nr', run_nr)
            thisExp.addData('block_nr_run', block_nr_run)
            thisExp.addData('block_name', curr_block)
            thisExp.addData('n-back_level', curr_nback_cond)

            # start a new row in the csv
            thisExp.nextEntry()

            # Setup for Q3
            Q3_text = locals()[curr_text_nr + "_Q3"]
            Q3_answers = locals()[curr_text_nr + "_Q3_ans"]
            Q3_correct = locals()[curr_text_nr + "_Q3_corr"]

            question, answers = setup_question(Q3_text, Q3_answers)
            display_question(question, answers)
            chosen_ans, is_correct = get_response(answers, Q3_correct)
            print(f"Chosen answer for Q3: {chosen_ans}, Correct: {is_correct}")
            reset_answers(answers)

            # save data:
            thisExp.addData('question', 'Q3')
            thisExp.addData('chosen_ans', chosen_ans)
            thisExp.addData('ans_correct', chosen_ans == Q3_correct)
            thisExp.addData('text_nr', curr_text_nr)
            thisExp.addData('block_nr_exp', exp_block_counter)
            thisExp.addData('run_nr', run_nr)
            thisExp.addData('block_nr_run', block_nr_run)
            thisExp.addData('block_name', curr_block)
            thisExp.addData('n-back_level', curr_nback_cond)

            # start a new row in the csv
            thisExp.nextEntry()

            exp_block_counter += 1
            # run3_block_counter += 1
            print(f"Going to block {exp_block_counter + 1}/10 in the experiment now!")
            continueRoutine = False

            print(f"Finished this dual task run, moving on to next run!")
            # loop_dual_task_blocks.finished = True

            # keep background ivory
            win.setColor(light_bg_col, colorSpace='rgb')
            win.flip()

            # Show run finished screen in between runs
            if 7 <= exp_block_counter <= 9:
                run_finished_text = "Diese Runde des Experiments ist nun zu Ende. Bitte bleiben Sie ruhig liegen, es geht gleich weiter."
                # set text
                instr_text = run_finished_text
                # create text box
                instr_text_stim = visual.TextStim(win,
                                                  text=instr_text,
                                                  height=0.05,
                                                  pos=(0, 0),
                                                  color="black")

                # display the text on screen until Return is pressed
                while True:
                    # keep background ivory
                    win.setColor(light_bg_col, colorSpace='rgb')
                    instr_text_stim.draw()
                    win.flip()
                    # end screen if participant presses space
                    if 'return' in event.getKeys():
                        print("moving on to next run!")
                        break

            # If there are still blocks left, go to next one.
            # If not, end loop here:
            elif exp_block_counter == 10:
                print(f"Finished run 4, finishing experiment!")
                loop_dual_task_blocks.finished = True
  Routine run_finished
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    CodeComponent run_finished
      Code Type = Py
      Begin Routine:
        #################################################
        #                  Finished run                 #
        #################################################

        # keep background ivory
        win.setColor(light_bg_col, colorSpace='rgb')
        win.flip()

        if exp_block_counter == 2 or exp_block_counter == 6:

            run_finished_text = "Diese Runde des Experiments ist nun zu Ende. Bitte bleiben Sie ruhig liegen, es geht gleich weiter."
            # set text
            instr_text = run_finished_text
            # create text box
            instr_text_stim = visual.TextStim(win,
                                              text=instr_text,
                                              height=0.05,
                                              pos=(0, 0),
                                              color="black")

            # display the text on screen until Space is pressed
            while True:
                # keep background ivory
                win.setColor(light_bg_col, colorSpace='rgb')
                instr_text_stim.draw()
                win.flip()
                # end screen if participant presses space
                if 'return' in event.getKeys():
                    print("moving on to next run!")
                    break
Flow
  Routine Settings
  LoopInitiator loop_run1_single_reading loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine single_reading
  LoopTerminator loop_run1_single_reading
  Routine run_finished
  LoopInitiator loop_run2_single_nback loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine single_nback
  LoopTerminator loop_run2_single_nback
  Routine run_finished
  LoopInitiator loop_dual_task_blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine dual_task_block
  LoopTerminator loop_dual_task_blocks
  Routine end
